PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to press space if the white square appeared in the same location as the location on the last trial. For example if the square was in the left down corner on trial 1 and then it appeared in the same location on trial 2, press space. Otherwise, do not respond. Press space to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
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    TextComponent fixation_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        if lifu_inlet is not None:
            _stop_sample, _ = lifu_inlet.pull_sample(timeout=0.0)
            if _stop_sample is not None and _stop_sample[0] == -1.0:
                marker_outlet.push_sample(["STOP_EXPERIMENT"])
                thisExp.status = FINISHED
  Routine End
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    TextComponent thank_you
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.
        Thank you for your time.
    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if lifu_inlet is not None:
            _stop_sample, _ = lifu_inlet.pull_sample(timeout=0.0)
            if _stop_sample is not None and _stop_sample[0] == -1.0:
                marker_outlet.push_sample(["STOP_EXPERIMENT"])
                thisExp.status = FINISHED
  Routine N_back_1_Trial
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    ImageComponent grid_lines
      image = grid
      size = (0.6, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    PolygonComponent target_square
      fillColor = $[1.000,1.000,1.000]
      pos [set every repeat] = $location
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent fixation_2
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent response
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine Instructions_2
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    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this 2‑back task, you will see a series of squares appear one at a time on the screen. Your job is to press the match key whenever the current square is the same as the one shown two squares earlier, and do nothing otherwise. Respond as quickly and accurately as you can throughout the sequence.

        For example if the square appeared in left down corner on trial 1, you should press space if the square appears in the left down corner on trial 3. Press space to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine N_back_2_trials
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    ImageComponent grid_lines_2
      image = grid
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent target_square_2
      fillColor = $[1.000,1.000,1.000]
      pos [set every repeat] = $location
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextComponent fixation_3
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = +
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    KeyboardComponent response_2
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInlet, resolve_byprop, StreamInfo, StreamOutlet

        print("Searching for LIFUEvents stream...")
        streams = resolve_byprop('name', 'PsychoPy_numeric', timeout=30)

        # Create the PsychoPyMarkers outlet (this is the correct way)
        start_info = StreamInfo('PsychoPyMarkers', 'Markers', 1, 0, 'string')
        marker_outlet = StreamOutlet(start_info)

        if len(streams) == 0:
            print("ERROR: No psychopy stream found.")
            lifu_inlet = None
        else:
            lifu_inlet = StreamInlet(streams[0])
            print("Connected to psychopy stream.")
      Begin Routine:
        from pylsl import local_clock
        last_lifu_event = None
        last_lifu_time = local_clock()
        marker_outlet.push_sample(["START_EXPERIMENT"])
      Each Frame:
        if lifu_inlet is not None:
            sample, ts = lifu_inlet.pull_sample(timeout=0.0)

            if sample is not None:
                last_lifu_event = sample[0]
                if sample[0] == -1.0:
                    marker_outlet.push_sample(["STOP_EXPERIMENT"])
                    thisExp.status = FINISHED
      End Experiment:
        marker_outlet.push_sample(["STOP_EXPERIMENT"])
      End Routine:
        thisExp.addData('LIFU_marker', last_lifu_event)
        thisExp.addData('LSL_Time', last_lifu_time)
Flow
  Routine Instructions_2
  Routine Fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'location': [0, 0], 'corrAns': None},
      {'location': [0.2, 0], 'corrAns': None},
      {'location': [-0.2, 0.2], 'corrAns': None},
      {'location': [-0.2, 0], 'corrAns': None},
      {'location': [-0.2, 0.2], 'corrAns': 'space'},
      {'location': [0.2, -0.2], 'corrAns': None},
      {'location': [0, -0.2], 'corrAns': None},
      {'location': [0.2, 0.2], 'corrAns': None},
      {'location': [0, -0.2], 'corrAns': 'space'},
      {'location': [0.2, 0.2], 'corrAns': 'space'},
      {'location': [0.2, 0], 'corrAns': None},
      {'location': [0, 0], 'corrAns': None},
      {'location': [0.2, -0.2], 'corrAns': None},
      {'location': [-0.2, -0.2], 'corrAns': None},
      {'location': [0.2, -0.2], 'corrAns': 'space'},
      {'location': [0, 0.2], 'corrAns': None},
      {'location': [0.2, 0.2], 'corrAns': None},
      {'location': [0, 0], 'corrAns': None},
      {'location': [0, -0.2], 'corrAns': None},
      {'location': [0.2, 0], 'corrAns': None},
      {'location': [0, -0.2], 'corrAns': 'space'},
      {'location': [-0.2, 0.2], 'corrAns': None},
      {'location': [0.2, -0.2], 'corrAns': None},
      {'location': [-0.2, 0.2], 'corrAns': 'space'},
      {'location': [0, 0], 'corrAns': None},
      {'location': [0.2, 0.2], 'corrAns': None},
      {'location': [-0.2, -0.2], 'corrAns': None},
      {'location': [0.2, 0], 'corrAns': None},
      {'location': [0, 0.2], 'corrAns': None},
      {'location': [0.2, 0], 'corrAns': 'space'},
      {'location': [-0.2, -0.2], 'corrAns': None},
      {'location': [0, -0.2], 'corrAns': None},
      {'location': [0, 0.2], 'corrAns': None},
      {'location': [0.2, 0.2], 'corrAns': None},
      {'location': [0, 0], 'corrAns': None},
      {'location': [0.2, -0.2], 'corrAns': None}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
    Routine N_back_2_trials
  LoopTerminator trials
  Routine End
